PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = $(1.0000, 1.0000, 1.0000)
  expName = CRM_Spat
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine escu
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    ButtonComponent Pasdeffort
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.9, 0.05)
      startVal [time (s)] = 0
      text = Pas d'effort
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    ButtonComponent __1
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.33)
      size = (0.85, 0.05)
      startVal [time (s)] = 0
      text = ===
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    ButtonComponent Trespeudeffort
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.26)
      size = (0.8, 0.05)
      startVal [time (s)] = 0
      text = Très peu d'effort
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    ButtonComponent __2
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.19)
      size = (0.75, 0.05)
      startVal [time (s)] = 0
      text = ===
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    ButtonComponent Peudeffort
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.12)
      size = (0.7, 0.05)
      startVal [time (s)] = 0
      text = Peu d'effort
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    ButtonComponent __3
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -.05)
      size = (0.65, 0.04)
      startVal [time (s)] = 0
      text = ===
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    ButtonComponent Effortmodere
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, 0.02)
      size = (0.55, 0.05)
      startVal [time (s)] = 0
      text = Effort modéré
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    ButtonComponent __4
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, .09)
      size = (0.5, 0.05)
      startVal [time (s)] = 0
      text = ===
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    ButtonComponent Effortconsiderable
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, 0.16)
      size = (0.45, 0.05)
      startVal [time (s)] = 0
      text = Effort considérable
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    ButtonComponent __5
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, 0.23)
      size = (0.4, 0.05)
      startVal [time (s)] = 0
      text = ===
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    ButtonComponent Beaucoupdeffort
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, 0.3)
      size = (0.35, 0.05)
      startVal [time (s)] = 0
      text = Beaucoup d'effort
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    ButtonComponent Quedubruit
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, .4)
      size = (0.3, 0.05)
      startVal [time (s)] = 0
      text = Que du bruit
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  Routine Start
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    TextComponent Starttext
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0
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      text:
        SpatFRCMR

        Écoutez les phrases, et reportez la couleur et le chiffre du locuteur qui s'addresse à DELTA.
    ButtonComponent Startbutton
      bold = True
      color = $(-1.0000, -1.0000, -1.0000)
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (0.5, 0.2)
      startVal [time (s)] = 0
      text = Commencer la tâche
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  Routine End
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    ButtonComponent EndButton
      bold = True
      color = $(-1.0000, -1.0000, -1.0000)
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (0.5, 0.2)
      startVal [time (s)] = 0
      text = Quitter
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    TextComponent Endtext
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0
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      text:
        Tâche terminée!

        Merci!
  Routine bloc_2loc
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    TextComponent text_instruction
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Écouter
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    ButtonComponent R1
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.525, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 1
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    ButtonComponent R2
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.375, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 2
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    ButtonComponent R3
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.225, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 3
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    ButtonComponent R4
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.075, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 4
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    ButtonComponent R5
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.075, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 5
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    ButtonComponent R6
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.225, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 6
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    ButtonComponent R7
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.375, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 7
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    ButtonComponent R8
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.525, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 8
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    ButtonComponent B1
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.525, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 1
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    ButtonComponent B2
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.375, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 2
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    ButtonComponent B3
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.225, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 3
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    ButtonComponent B4
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.075, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 4
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    ButtonComponent B5
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.075, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 5
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    ButtonComponent B6
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.225, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 6
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    ButtonComponent B7
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.375, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 7
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    ButtonComponent B8
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.525, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 8
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    ButtonComponent V1
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.525, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 1
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    ButtonComponent V2
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.375, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 2
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    ButtonComponent V3
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.225, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 3
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    ButtonComponent V4
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.075, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 4
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    ButtonComponent V5
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.075, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 5
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    ButtonComponent V6
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.225, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 6
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    ButtonComponent V7
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.375, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 7
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    ButtonComponent V8
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.525, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 8
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    ButtonComponent J1
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.525, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 1
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    ButtonComponent J2
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.375, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 2
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    ButtonComponent J3
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.225, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 3
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    ButtonComponent J4
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.075, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 4
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    ButtonComponent J5
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.075, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 5
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    ButtonComponent J6
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.225, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 6
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    ButtonComponent J7
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.375, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 7
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    ButtonComponent J8
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.525, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 8
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    SoundComponent Target_1
      deviceLabel = Casque_PcHamery
      forceEndRoutine = False
      sound [set every repeat] = $Target_2loc
      startVal [time (s)] = 0.5
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    SoundComponent Marsker_1
      deviceLabel = Casque_PcHamery
      forceEndRoutine = False
      sound [set every repeat] = $Mask_2loc
      startVal [time (s)] = 0.5
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import sofar
        import soundfile as sf
        from scipy.signal import fftconvolve
        from functions import getHRIR
        sofa = sofar.read_sofa("C:\\Users\\chamery\\Documents\\Spat_CRM_Protocol\\Spat_CRM_Protocol\\extfiles\\IRC_1002_R_44100.sofa")
        azimut = [270 ,280 ,290 ,300 ,310 ,320 ,330 ,340 ,350 ,0 , 10, 20, 30, 40, 50, 60, 70, 80, 90]
      Begin Routine:
        az = 90
        ###hrtf
        hrir_left, hrir_right = getHRIR(az, 0) # az : angle azimuth, 0 pas d'élévation

        audio, sr = sf.read(Target_2loc)

        left = fftconvolve(audio, hrir_left)
        right = fftconvolve(audio, hrir_right)
        stereo = np.column_stack((left, right))
        stereo /= np.max(np.abs(stereo))
        stereo = stereo.astype(np.float32) #pour ptb
        Target_1 = sound.Sound(
        stereo,
        sampleRate=sr,
        stereo=True,
        hamming=False,
        speaker='Casque_PcHamery',
        name='Target_1_binaural'
        )
        Target_1.setVolume(1.0, log=False)
      Each Frame:
        az = 90
        ###hrtf
        hrir_left, hrir_right = getHRIR(az, 0) # az : angle azimuth, 0 pas d'élévation

        audio, sr = sf.read(Target_2loc)

        left = fftconvolve(audio, hrir_left)
        right = fftconvolve(audio, hrir_right)
        stereo = np.column_stack((left, right))
        stereo /= np.max(np.abs(stereo))
        stereo = stereo.astype(np.float32) #pour ptb
        Target_1 = sound.Sound(
        stereo,
        sampleRate=sr,
        stereo=True,
        hamming=False,
        speaker='Casque_PcHamery',
        name='Target_1_binaural'
        )
        Target_1.setVolume(1.0, log=False)
  Routine bloc_3loc
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    TextComponent text_instruction_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Écouter
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    ButtonComponent R1_3
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.525, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 1
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    ButtonComponent R2_3
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.375, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 2
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    ButtonComponent R3_3
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.225, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 3
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    ButtonComponent R4_3
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.075, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 4
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    ButtonComponent R5_3
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.075, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 5
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    ButtonComponent R6_3
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.225, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 6
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    ButtonComponent R7_3
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.375, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 7
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    ButtonComponent R8_3
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.525, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 8
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    ButtonComponent B1_3
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.525, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 1
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    ButtonComponent B2_3
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.375, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 2
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    ButtonComponent B3_3
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.225, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 3
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    ButtonComponent B4_3
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.075, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 4
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    ButtonComponent B5_3
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.075, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 5
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    ButtonComponent B6_3
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.225, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 6
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    ButtonComponent B7_3
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.375, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 7
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    ButtonComponent B8_3
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.525, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 8
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    ButtonComponent V1_3
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.525, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 1
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    ButtonComponent V2_3
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.375, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 2
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    ButtonComponent V3_3
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.225, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 3
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    ButtonComponent V4_3
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.075, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 4
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    ButtonComponent V5_3
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.075, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 5
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    ButtonComponent V6_3
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.225, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 6
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    ButtonComponent V7_3
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.375, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 7
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    ButtonComponent V8_3
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.525, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 8
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    ButtonComponent J1_3
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.525, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 1
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    ButtonComponent J2_3
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.375, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 2
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    ButtonComponent J3_3
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.225, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 3
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    ButtonComponent J4_3
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.075, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 4
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    ButtonComponent J5_3
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.075, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 5
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    ButtonComponent J6_3
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.225, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 6
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    ButtonComponent J7_3
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.375, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 7
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    ButtonComponent J8_3
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.525, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 8
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    SoundComponent Target_2
      deviceLabel = Casque_PcHamery
      forceEndRoutine = False
      sound [set every repeat] = $Target_3loc
      startVal [time (s)] = 0.5
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    SoundComponent Marsker2_1
      deviceLabel = Casque_PcHamery
      forceEndRoutine = False
      sound [set every repeat] = $Mask1_3loc
      startVal [time (s)] = 0.5
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    SoundComponent Masker2_2
      deviceLabel = Casque_PcHamery
      forceEndRoutine = False
      sound [set every repeat] = $Mask2_3loc
      startVal [time (s)] = 0.5
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  Routine Start_Bloc2
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    ButtonComponent StartBloc2
      bold = True
      color = $(-1.0000, -1.0000, -1.0000)
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (0.5, 0.2)
      startVal [time (s)] = 0
      text = Bloc 2 : 3 locuteurs (1 cilbe + 2 mask)
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    TextComponent TextBloc2
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0
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      text:
        SpatFRCMR

        Écoutez les phrases, et reportez la couleur et le chiffre du locuteur qui s'addresse à DELTA.
Flow
  Routine Start
  LoopInitiator trials_2loc loopType="TrialHandler"
    conditionsFile = conditions/conditions_2loc.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Target_2loc', 'E:\\ACERI\\CRMFRvsEN\\02SCRIPTS\\Tache\\sound\\FR\\T1_M_Delta_jaune_3_0.wav'), ('Target_Talker_2loc', 'T1'), ('Target_Gender_2loc', 'M'), ('Target_Callsign_2loc', 'Delta'), ('Target_Color_2loc', 'jaune'), ('Target_Digit_2loc', np.int64(3)), ('Target_Angle_2loc', np.int64(0)), ('Mask_2loc', 'E:\\ACERI\\CRMFRvsEN\\02SCRIPTS\\Tache\\sound\\FR\\T0_M_Alpha_vert_5_70.wav'), ('Mask_Talker_2loc', 'T0'), ('Mask_Gender_2loc', 'M'), ('Mask_Callsign_2loc', 'Alpha'), ('Mask_Color_2loc', 'vert'), ('Mask_Digit_2loc', np.int64(5)), ('Mask_Angle_2loc', np.int64(70))]),
      OrderedDict([('Target_2loc', 'E:\\ACERI\\CRMFRvsEN\\02SCRIPTS\\Tache\\sound\\FR\\T5_F_Delta_bleu_5_0.wav'), ('Target_Talker_2loc', 'T5'), ('Target_Gender_2loc', 'F'), ('Target_Callsign_2loc', 'Delta'), ('Target_Color_2loc', 'bleu'), ('Target_Digit_2loc', np.int64(5)), ('Target_Angle_2loc', np.int64(0)), ('Mask_2loc', 'E:\\ACERI\\CRMFRvsEN\\02SCRIPTS\\Tache\\sound\\FR\\T4_F_Tango_bleu_6_70.wav'), ('Mask_Talker_2loc', 'T4'), ('Mask_Gender_2loc', 'F'), ('Mask_Callsign_2loc', 'Tango'), ('Mask_Color_2loc', 'bleu'), ('Mask_Digit_2loc', np.int64(6)), ('Mask_Angle_2loc', np.int64(70))]),
      OrderedDict([('Target_2loc', 'E:\\ACERI\\CRMFRvsEN\\02SCRIPTS\\Tache\\sound\\FR\\T5_F_Delta_rouge_4_0.wav'), ('Target_Talker_2loc', 'T5'), ('Target_Gender_2loc', 'F'), ('Target_Callsign_2loc', 'Delta'), ('Target_Color_2loc', 'rouge'), ('Target_Digit_2loc', np.int64(4)), ('Target_Angle_2loc', np.int64(0)), ('Mask_2loc', 'E:\\ACERI\\CRMFRvsEN\\02SCRIPTS\\Tache\\sound\\FR\\T4_F_Whisky_rouge_7_70.wav'), ('Mask_Talker_2loc', 'T4'), ('Mask_Gender_2loc', 'F'), ('Mask_Callsign_2loc', 'Whisky'), ('Mask_Color_2loc', 'rouge'), ('Mask_Digit_2loc', np.int64(7)), ('Mask_Angle_2loc', np.int64(70))]),
      OrderedDict([('Target_2loc', 'E:\\ACERI\\CRMFRvsEN\\02SCRIPTS\\Tache\\sound\\FR\\T1_M_Delta_jaune_1_0.wav'), ('Target_Talker_2loc', 'T1'), ('Target_Gender_2loc', 'M'), ('Target_Callsign_2loc', 'Delta'), ('Target_Color_2loc', 'jaune'), ('Target_Digit_2loc', np.int64(1)), ('Target_Angle_2loc', np.int64(0)), ('Mask_2loc', 'E:\\ACERI\\CRMFRvsEN\\02SCRIPTS\\Tache\\sound\\FR\\T0_M_Echo_rouge_1_90.wav'), ('Mask_Talker_2loc', 'T0'), ('Mask_Gender_2loc', 'M'), ('Mask_Callsign_2loc', 'Echo'), ('Mask_Color_2loc', 'rouge'), ('Mask_Digit_2loc', np.int64(1)), ('Mask_Angle_2loc', np.int64(90))])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
    Routine bloc_2loc
    Routine escu
  LoopTerminator trials_2loc
  Routine Start_Bloc2
  LoopInitiator trials_3loc loopType="TrialHandler"
    conditionsFile = conditions/conditions_3loc.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Target_3loc', 'E:\\ACERI\\CRMFRvsEN\\02SCRIPTS\\Tache\\sound\\FR\\T5_F_Delta_jaune_3_0.wav'), ('Target_Talker_3loc', 'T5'), ('Target_Gender_3loc', 'F'), ('Target_Callsign_3loc', 'Delta'), ('Target_Color_3loc', 'jaune'), ('Target_Digit_3loc', np.int64(3)), ('Target_Angle_3loc', np.int64(0)), ('Mask1_3loc', 'E:\\ACERI\\CRMFRvsEN\\02SCRIPTS\\Tache\\sound\\FR\\T6_F_Tango_bleu_2_90.wav'), ('Mask1_Talker_3loc', 'T6'), ('Mask1_Gender_3loc', 'F'), ('Mask1_Callsign_3loc', 'Tango'), ('Mask1_Color_3loc', 'bleu'), ('Mask1_Digit_3loc', np.int64(2)), ('Mask1_Angle_3loc', np.int64(90)), ('Mas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,
      OrderedDict([('Target_3loc', 'E:\\ACERI\\CRMFRvsEN\\02SCRIPTS\\Tache\\sound\\FR\\T0_M_Delta_jaune_6_0.wav'), ('Target_Talker_3loc', 'T0'), ('Target_Gender_3loc', 'M'), ('Target_Callsign_3loc', 'Delta'), ('Target_Color_3loc', 'jaune'), ('Target_Digit_3loc', np.int64(6)), ('Target_Angle_3loc', np.int64(0)), ('Mask1_3loc', 'E:\\ACERI\\CRMFRvsEN\\02SCRIPTS\\Tache\\sound\\FR\\T1_M_Alpha_vert_4_80.wav'), ('Mask1_Talker_3loc', 'T1'), ('Mask1_Gender_3loc', 'M'), ('Mask1_Callsign_3loc', 'Alpha'), ('Mask1_Color_3loc', 'vert'), ('Mask1_Digit_3loc', np.int64(4)), ('Mask1_Angle_3loc', np.int64(80)), ('Mask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,
      OrderedDict([('Target_3loc', 'E:\\ACERI\\CRMFRvsEN\\02SCRIPTS\\Tache\\sound\\FR\\T4_F_Delta_bleu_4_0.wav'), ('Target_Talker_3loc', 'T4'), ('Target_Gender_3loc', 'F'), ('Target_Callsign_3loc', 'Delta'), ('Target_Color_3loc', 'bleu'), ('Target_Digit_3loc', np.int64(4)), ('Target_Angle_3loc', np.int64(0)), ('Mask1_3loc', 'E:\\ACERI\\CRMFRvsEN\\02SCRIPTS\\Tache\\sound\\FR\\T6_F_Kilo_rouge_6_70.wav'), ('Mask1_Talker_3loc', 'T6'), ('Mask1_Gender_3loc', 'F'), ('Mask1_Callsign_3loc', 'Kilo'), ('Mask1_Color_3loc', 'rouge'), ('Mask1_Digit_3loc', np.int64(6)), ('Mask1_Angle_3loc', np.int64(70)), ('Mask2_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,
      OrderedDict([('Target_3loc', 'E:\\ACERI\\CRMFRvsEN\\02SCRIPTS\\Tache\\sound\\FR\\T2_M_Delta_bleu_8_0.wav'), ('Target_Talker_3loc', 'T2'), ('Target_Gender_3loc', 'M'), ('Target_Callsign_3loc', 'Delta'), ('Target_Color_3loc', 'bleu'), ('Target_Digit_3loc', np.int64(8)), ('Target_Angle_3loc', np.int64(0)), ('Mask1_3loc', 'E:\\ACERI\\CRMFRvsEN\\02SCRIPTS\\Tache\\sound\\FR\\T0_M_Echo_bleu_3_10.wav'), ('Mask1_Talker_3loc', 'T0'), ('Mask1_Gender_3loc', 'M'), ('Mask1_Callsign_3loc', 'Echo'), ('Mask1_Color_3loc', 'bleu'), ('Mask1_Digit_3loc', np.int64(3)), ('Mask1_Angle_3loc', np.int64(10)), ('Mask2_3l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
    Routine bloc_3loc
    Routine escu
  LoopTerminator trials_3loc
  Routine End
